CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:.*Images\\\\\\\\(?P<stagepos>.*)\\\\\\\\
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:.*T(?P<Time>.*).tif
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:.*Chan_(?P<Chan>.*)
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Select the rule criteria:and (metadata does Chan "2")
    Name to assign these images:EGFP
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (metadata does Chan "1")
    Name to assign these images:mCherry
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:stagepos

Smooth:[module_num:5|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enabled:False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
    Select the input image:EGFP
    Name the output image:EGFP_f
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:4
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
Smooth:[module_num:6|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enabled:False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
    Select the input image:mCherry
    Name the output image:mCherry_f
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:3
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:EGFP
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):8,40
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Name the outline image:NucleiOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Background
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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
RunImageJ:[module_num:8|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enabled:False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
    Run an ImageJ command or macro?:Command
    Command:Process|Noise|Add Specified Noise...
    Macro:run("Add Specified Noise...", "standard=0.0001");\\u000arun("Close All");
    Macro language:IJ1 Macro
    Input the currently active image in ImageJ?:Yes
    Select the input image:mCherry
    Retrieve the currently active image from ImageJ?:No
    Name the current output image:ImageJImage
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Command
    Command:File|Quit
    Macro:run("Close All");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:4
    Prepare group command settings count:0
    Post-group command settings count:0
    display (Input):mCherry
    Standard deviation:0.00001
    Apply to all planes:No
    display (Output):ImageJImage

SaveImages:[module_num:9|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:ImageJImage
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    Select method for constructing file names:Sequential numbers
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    Enter single file name:OrigBlue
    Number of digits:4
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    Saved file format:tif
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifySecondaryObjects:[module_num:10|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:mCherry
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    Name the outline image:SecondaryOutlines
    Retain outlines of the identified secondary objects?:Yes
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredNuclei
    Retain outlines of the new primary objects?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:RobustBackground
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Method to calculate adaptive window size:Image size
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    Use default parameters?:Default
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
MeasureObjectSizeShape:[module_num:11|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
    Select objects to measure:FilteredNuclei
    Select objects to measure:Cells
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:12|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
    Hidden:2
    Select an image to measure:EGFP
    Select an image to measure:mCherry
    Select objects to measure:FilteredNuclei
    Select objects to measure:Cells

TrackObjects:[module_num:13|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
    Choose a tracking method:Distance
    Select the objects to track:FilteredNuclei
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    Maximum pixel distance to consider matches:35
    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedCells
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    Filter objects by lifetime?:Yes
    Filter using a minimum lifetime?:Yes
    Minimum lifetime:12
    Filter using a maximum lifetime?:No
    Maximum lifetime:100
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
OverlayOutlines:[module_num:14|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
    Display outlines on a blank image?:Yes
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    Name the output image:OrigOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:green
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei
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    Select outline color:red
    Load outlines from an image or objects?:Objects
    Select objects to display:Cells

OverlayOutlines:[module_num:15|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
    Display outlines on a blank image?:Yes
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    Name the output image:CellBoundary
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    Width of outlines:1
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    Load outlines from an image or objects?:Objects
    Select objects to display:Cells

SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
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    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Nuc
    Number of digits:4
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    Saved file format:jpeg
    Output file location:Default Output Folder sub-folder|Nuclei
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Select colormap:spectral
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:TrackedCells
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    Select method for constructing file names:Sequential numbers
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    Enter single file name:Tracked_cells
    Number of digits:4
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    Saved file format:jpeg
    Output file location:Default Output Folder sub-folder|Tracking
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Select colormap:spectral
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:18|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
    Select the type of image to save:Objects
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    Select the objects to save:Cells
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    Select method for constructing file names:Sequential numbers
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    Enter single file name:CellMasks_
    Number of digits:4
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    Saved file format:tif
    Output file location:Default Output Folder sub-folder|CellMasks
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
    Select colormap:spectral
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:19|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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